OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

MI BCI Stimulator B&F;P&S => #0
  Lua Script = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Codigos/MotorImageryB&F;P&S.txt
  Number of Trials for Each Class = 16
  First Class = OVTK_GDF_Arm_Movement
  Second Class = OVTK_GDF_Rotation_Clockwise
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 5
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 3
  End of Trial Maximum Duration (in sec) = 3
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_GDF_Start_Of_Trial
  Cue Image 1 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/Mov.Back&Forth.jpeg
  Stimulation 1 = OVTK_GDF_Arm_Movement
  Cue Image 2 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/CruzFijación.png
  Stimulation 2 = OVTK_GDF_Cross_On_Screen
  Cue Image 3 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/Descanso.png
  Stimulation 3 = OVTK_GDF_End_Of_Trial
  Cue Image 4 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/Mov.Pron&Supin.jpeg
  Stimulation 4 = OVTK_GDF_Rotation_Clockwise
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#3.Signal stream -> Channel Selector "Cz;2;4;5;6;7;10;12" => #4
  Channel List = Cz;2;4;5;6;7;10;12
  Action = Select
  Channel Matching Method = Smart
Input stream=#4, Stimulations stream=#0 -> CSV File Writer
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Adquisición/B&F_P&S_Adquisición-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stream 1=#3.Experiment information, Input stream 2=#4, Input stream 3=#0 -> Generic stream writer
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Adquisición/B&F-P&S-Adquisición-[$core{date}-$core{time}].ov
  Use compression = false
