OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Generic stream reader => #0
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Adquisición/B&F-P&S-Adquisición-[2023.10.09-16.52.25].ov
#0.Output stream 2 -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Low Cut-off Frequency 2 (Hz) = 12
  High Cut-off Frequency 2 (Hz) = 16
  Low Cut-off Frequency 3 (Hz) = 16
  High Cut-off Frequency 3 (Hz) = 20
  Low Cut-off Frequency 4 (Hz) = 20
  High Cut-off Frequency 4 (Hz) = 24
  Low Cut-off Frequency 5 (Hz) = 24
  High Cut-off Frequency 5 (Hz) = 28
  Low Cut-off Frequency 6 (Hz) = 28
  High Cut-off Frequency 6 (Hz) = 32
#1.Output signal -> Spatial Filter => #2
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp1-spatial-filter-b&f-p&s.cfg
#1.Output 2 -> Spatial Filter => #3
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp2-spatial-filter-b&f-p&s.cfg
#1.Output 3 -> Spatial Filter => #4
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp3-spatial-filter-b&f-p&s.cfg
#1.Output signal 4 -> Spatial Filter => #5
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp4-spatial-filter-b&f-p&s.cfg
#1.Output signal 5 -> Spatial Filter => #6
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp5-spatial-filter-b&f-p&s.cfg
#1.Output signal 6 -> Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp6-spatial-filter-b&f-p&s.cfg
Input 1=#2, Input 2=#3, Input 3=#4, Input 4=#5, Input 5=#6, Input 6=#7 -> Signal Merger => #8
Input stream 2=#0.Output stream 3 -> Identity => #9
Input signal=#8, Input stimulations=#9.Output stream 2 -> Stimulation based epoching "B&F"
  Epoch duration (in sec) = 4.49
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Arm_Movement
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #13
Input signal=#8, Input stimulations=#9.Output stream 2 -> Stimulation based epoching "P&S"
  Epoch duration (in sec) = 4.49
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Rotation_Clockwise
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #17
Stimulations=#9.Output stream 2, Features for class 1=#13, Features for class 2=#17 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Classifier/classifier-b&f-p&s.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Arm_Movement
  Class 2 label = OVTK_GDF_Rotation_Clockwise
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
