OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Generic stream reader => #0
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Adquisición/B&F-P&S-Adquisición-[2023.10.09-16.52.25].ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> 8-12 => #2
  Low Cut Frequency = 8
  High Cut Frequency = 12
  Epoch Duration = 4.49
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Arm_Movement
  Class 2 = OVTK_GDF_Rotation_Clockwise
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp1-spatial-filter-b&f-p&s.cfg
  Filter Dimension = 6
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> 12-16 => #3
  Low Cut Frequency = 12
  High Cut Frequency = 16
  Epoch Duration = 4.49
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Arm_Movement
  Class 2 = OVTK_GDF_Rotation_Clockwise
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp2-spatial-filter-b&f-p&s.cfg
  Filter Dimension = 6
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> 16-20 => #4
  Low Cut Frequency = 16
  High Cut Frequency = 20
  Epoch Duration = 4.49
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Arm_Movement
  Class 2 = OVTK_GDF_Rotation_Clockwise
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp3-spatial-filter-b&f-p&s.cfg
  Filter Dimension = 6
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> 20-24 => #5
  Low Cut Frequency = 20
  High Cut Frequency = 24
  Epoch Duration = 4.49
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Arm_Movement
  Class 2 = OVTK_GDF_Rotation_Clockwise
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp4-spatial-filter-b&f-p&s.cfg
  Filter Dimension = 6
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> 24-28 => #6
  Low Cut Frequency = 24
  High Cut Frequency = 28
  Epoch Duration = 4.49
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Arm_Movement
  Class 2 = OVTK_GDF_Rotation_Clockwise
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp5-spatial-filter-b&f-p&s.cfg
  Filter Dimension = 6
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> 28-32 => #7
  Low Cut Frequency = 28
  High Cut Frequency = 32
  Epoch Duration = 4.49
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Arm_Movement
  Class 2 = OVTK_GDF_Rotation_Clockwise
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp6-spatial-filter-b&f-p&s.cfg
  Filter Dimension = 6
Input stimulations 1=#2, Input stimulations 2=#3, Input stimulations 3=#4, Input stimulations 4=#5, Input stimulations 5=#6, Input stimulations 6=#7 -> Stimulation multiplexer
-> Stimulation Validator
  Stimulation to count = OVTK_StimulationId_TrainCompleted
  Number for validation = 6
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
