OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream -> Identity => #1
#1.Output stream 2 -> Channel Selector "Cz;2;4;5;6;7;10;12" => #2
  Channel List = Cz;2;4;5;6;7;10;12
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "Cz;2;4;5;6;7;10;12" => #3
  Channel List = Cz;2;4;5;6;7;10;12
  Action = Select
  Channel Matching Method = Smart
MI BCI Stimulator B&F;P&S => #4
  Lua Script = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Codigos/MotorImageryB&F;P&S.txt
  Number of Trials for Each Class = 8
  First Class = OVTK_GDF_Arm_Movement
  Second Class = OVTK_GDF_Rotation_Clockwise
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 1.000000
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 15
  Feedback Duration (in sec) = 10
  End of Trial Minimum Duration (in sec) = 3
  End of Trial Maximum Duration (in sec) = 3
-> Switch director => #5
  Lua Script = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Codigos/SwitchDirectorScript.txt
  offset = 0.5
  duration = 14.49
Triggers=#5, Matrix=#3 -> Stream Switch => #6
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#6.Output -> Temporal Filter => #7
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Low Cut-off Frequency 2 (Hz) = 12
  High Cut-off Frequency 2 (Hz) = 16
  Low Cut-off Frequency 3 (Hz) = 16
  High Cut-off Frequency 3 (Hz) = 20
  Low Cut-off Frequency 4 (Hz) = 20
  High Cut-off Frequency 4 (Hz) = 24
  Low Cut-off Frequency 5 (Hz) = 24
  High Cut-off Frequency 5 (Hz) = 28
  Low Cut-off Frequency 6 (Hz) = 28
  High Cut-off Frequency 6 (Hz) = 32
#7.Output signal -> Spatial Filter => #8
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp1-spatial-filter-b&f-p&s.cfg
#7.Output 2 -> Spatial Filter => #9
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp2-spatial-filter-b&f-p&s.cfg
#7.Output 3 -> Spatial Filter => #10
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp3-spatial-filter-b&f-p&s.cfg
#7.Output signal 4 -> Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp4-spatial-filter-b&f-p&s.cfg
#7.Output signal 5 -> Spatial Filter => #12
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp5-spatial-filter-b&f-p&s.cfg
#7.Output signal 6 -> Spatial Filter => #13
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/FBCSP/fbcsp6-spatial-filter-b&f-p&s.cfg
Input 1=#8, Input 2=#9, Input 3=#10, Input 4=#11, Input 5=#12, Input 6=#13 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #17
Features=#17 -> Classifier processor => #18
  Filename to load configuration from = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Classifier/classifier-b&f-p&s.cfg
Stimulations=#4, Amplitude=#18.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#18.Labels -> TCP Writer
  Port = 5679
  Output format = String
Input stream 1=#1.Output stream 1, Input stream 2=#2, Input stream 3=#4 -> Generic stream writer
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/PruebaOnline/PruebaOnline-B&F-P&S-[$core{date}-$core{time}].ov
  Use compression = false
Input stream=#2, Stimulations stream=#4 -> CSV File Writer
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/PruebaOnline/B&F_P&S_Online-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
#4 -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Arm_Movement
  Stimulation range end = OVTK_GDF_Arm_Movement
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Rotation_Clockwise
  Stimulation range end(1) = OVTK_GDF_Rotation_Clockwise
-> TCP Writer
  Port = 5678
  Output format = String
#4 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#4 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_Start_Of_Trial
  Cue Image 1 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/Mov.Back&Forth.jpeg
  Stimulation 1 = OVTK_GDF_Arm_Movement
  Cue Image 2 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/CruzFijación.png
  Stimulation 2 = OVTK_GDF_Cross_On_Screen
  Cue Image 3 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/Descanso.png
  Stimulation 3 = OVTK_GDF_End_Of_Trial
  Cue Image 4 = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/Img/Mov.Pron&Supin.jpeg
  Stimulation 4 = OVTK_GDF_Rotation_Clockwise
