OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "Cz;2;4;5;6;7;10;12" => #1
  Channel List = Cz;2;4;5;6;7;10;12
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = C3;C1;Cz;C2;C4;CP3;CPz;CP4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 5
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Data=#3, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Signal average => #7
Input stream=#1 -> CSV File Writer
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/B&F-P&S/Revisión/SebastianRev-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Electrode localisation file reader => #9
  Filename = D:/1. UNAB/9. Proyecto de Grado/0. NeuroTrauma/OpenVibe/1. LastScenarios/electrode_set_standard_cartesian.txt
Signal=#7, Channel localization=#9 -> 2D topographic map
  Interpolation type = 1
  Delay (in s) = 0
